PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = fnirs_childrensschool
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Welcome to our task!
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialq1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $Question1
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    KeyboardComponent key_resp_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialq2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $Question2
    KeyboardComponent key_resp_3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialq3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $Question3
    KeyboardComponent key_resp_4
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialq4
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  Routine trialq5
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    TextComponent q_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $Question5
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    KeyboardComponent key_resp_5
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialq6
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    KeyboardComponent key_resp_6
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent q_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $Question6
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  Routine trialq7
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    TextComponent q_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $Question7
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    KeyboardComponent key_resp_7
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialq8
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    TextComponent q_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $Question8
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    KeyboardComponent key_resp_8
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine movie
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    MovieComponent vid
      backend = ffpyplayer
      forceEndRoutine = False
      movie = Desktop/lab_work/fnirs/stimuli/audio_lets-be-friends.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine end
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    ImageComponent image
      image = Downloads/Thank-You.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('Participant', 'sub-901'), ('BookType', 'video'), ('SelectedBookTitle', 'stimuli/video_why-do-flowers-grow.mp4'), ('Question1', 'Who eats the flowers?'), ('Question2', 'Where do Frog and Duck meet Bee and Butterfly?'), ('Question3', 'What are the animals trying to learn?'), ('Question4', 'Who is not happy with mole’s answer?'), ('Question5', 'Why does the girl say flowers grow?'), ('Question6', 'How do flowers make the girl feel?'), ('Question7', 'What does the bee collect from the flower?'), ('Question8', 'Who do Frog and Duck have a picnic with?')])]
    conditionsFile = Desktop/lab_work/fnirs/stimulus_sequences/sub-901_movieCS_seq.csv
    loopType = random
    nReps = 1
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    Routine movie
    Routine trialq1
    Routine trialq2
    Routine trialq3
    Routine trialq4
    Routine trialq5
    Routine trialq6
    Routine trialq7
    Routine trialq8
  LoopTerminator trials
  Routine end
